{
    "actions": {
        "B1_series": {
            "filters": {}, 
            "params": {
                "circleradiusfactor": 0.75
            }
        }, 
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "header_series": {
            "filters": {}, 
            "params": {}
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "MR/fBIRN_B1map for Philips", 
        "version": "20161118"
    }, 
    "info": {
        "B1_series": {
            "params": {
                "circleradiusfactor": "factor to adjust circle radius to stay within phantom"
            }
        }, 
        "acqdatetime": {
            "params": {}
        }, 
        "header_series": {
            "params": {}
        }
    }
}