{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "header_series": {
            "filters": {}, 
            "params": {}
        }, 
        "qc_series": {
            "filters": {}, 
            "params": {}
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "MR/fBIRN_QC for Philips", 
        "version": "20161026"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "header_series": {
            "params": {}
        }, 
        "qc_series": {
            "params": {}
        }
    }
}