{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "header_series": {
            "filters": {}, 
            "params": {}
        }, 
        "snr_series": {
            "filters": {}, 
            "params": {
                "circleradiusfactor": 0.75
            }
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "MR/fBIRN_PureSNR for Philips", 
        "version": "20161026"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "header_series": {
            "params": {}
        }, 
        "snr_series": {
            "params": {
                "circleradiusfactor": "factor to adjust circle radius to stay within phantom"
            }
        }
    }
}